// "StartupMacros"
// The macros and macro tools in this file ("StartupMacros.txt") are 
// automatically installed in the Plugins>Macros submenu and
//  in the tool bar when ImageJ starts up.
//
// Icons contributed by Tony Collins.

   // Global variables
   var pencilWidth=1,  eraserWidth=10, leftClick=16, alt=8;
   var brushWidth = 10; //call("ij.Prefs.get", "startup.brush", "10");
   var floodType =  "8-connected"; //call("ij.Prefs.get", "startup.flood", "8-connected");

   // The macro named "AutoRun" runs when ImageJ starts.
   // macro "AutoRun" {print("AutoRun");}

   // The macro named "AutoRunAndHide" runs when ImageJ starts
   // and the file containing it is not displayed when ImageJ opens it.
   // macro "AutoRunAndHide" {}



  //macro "Unused Tool -" {}

  var pmCmds = newMenu("Popup Menu",
       newArray("Help...", "Rename...", "Duplicate...", "Original Scale", 
       "Paste Control...", "-", "Record...", "Capture Screen ", "Monitor Memory...", 
       "List Commands...", "Control Panel...", "Startup Macros...", "Search..."));

  macro "Popup Menu" {
      cmd = getArgument();
      if (cmd=="Help...")
           showMessage("About Popup Menu",
               "To customize this menu, edit the line that starts with\n\"var pmCmds\" in ImageJ/macros/StartupMacros.txt.");
      else
          run(cmd);
  }

   
  var xx = requires138b(); // check version at install
  function requires138b() {requires("1.38b"); return 0; }

     var dCmds = newMenu("Developer Menu Tool",
      newArray("ImageJ Website","News", "Documentation", "ImageJ Wiki", "Resources", "Macro Language", "Macros", 
      "Macro Functions", "Startup Macros...", "Plugins", "Source Code", "Mailing List Archives", "-", "Record...", 
      "Capture Screen ", "Monitor Memory...", "List Commands...", "Control Panel...", "Search...", "Debug Mode"));
      
  

  

  macro "Set Drawing Color..."{ 
      run("Color Picker..."); 
  }

  macro "-" {} //menu divider

  macro "About Startup Macros..." {
      path = getDirectory("macros")+"/About Startup Macros";
      if (!File.exists(path))
          exit("\"About Startup Macros\" not found in ImageJ/macros/.");
      open(path);
  }

  macro "Save As JPEG... [j]" {
     quality = call("ij.plugin.JpegWriter.getQuality");
     quality = getNumber("JPEG quality (0-100):", quality);
     run("Input/Output...", "jpeg="+quality);
     saveAs("Jpeg");
  }

// Toolbar for Cornell Spectrum Imager
// 
var v=versionCheck();
function versionCheck() {
    requires("1.41f");
    return 1;
}

var CSI_folder='CSI EELS';

macro "Line Profile Action Tool- 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" {
      
	run("CSI Dynamic Profiler");
  
}


macro "Open Spectrum Action Tool - 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" {
	path = File.openDialog("Select a File to Open");
  
  	dir = File.getParent(path);
  	name = File.getName(path);

   	ext=substring(path, lastIndexOf(path, "."), lengthOf(path));

	if (ext == ".dm3") {
                run("CSI DM3 Reader", "load=[&path]");
                return;
        } 
	else if ( ext == ".ser" ) {
		run("CSI TIA Reader", "load=[&path]");
		return;
	}
	else
	{
		open(path);
	}

}


macro 'Subtract Dark Reference Action Tool - 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' {
	run("CSI Darkref Subtractor");
}

macro 'Cornell Spectrum Imager Action Tool - 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'{
	run("CSI Spectrum Analyzer");
}


macro 'Extract Slice Action Tool - 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'{
	select = getSliceNumber();
	name = getTitle()+" "+getInfo("slice.label");
	run("Z Project...", "start=&select stop=&select projection=[Sum Slices]");
	rename(name);
}




macro 'RGB Composite Action Tool - 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'{	select = getSliceNumber();
	run("Merge Channels...");
}




macro "Map to Line Action Tool - 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"{
	run("CSI Map to Line");
}

macro "Action Tool -" {}

macro "Hyperstack Format Action Tool - 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"{
	width=sqrt(nSlices); height=sqrt(nSlices);
  Dialog.create("Format PAD data...");
  Dialog.addNumber("Width:", width);
  Dialog.addNumber("Height:", height);
  Dialog.show();
  width = Dialog.getNumber();
  height = Dialog.getNumber();
  makeRectangle(2, 2, 124, 124);
  run("Crop");
  run("Stack to Hyperstack...", "order=xyczt(default) channels=1 slices="+width+" frames="+height+" display=Grayscale");
  resetMinAndMax();


}

macro "Reslice 4D Action Tool - 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"{
	run("Select All");
  name=getTitle();
  getDimensions(w,h,c,z,t);
  run("Reslice [/]...", "output=1.000 start=Top avoid");
  selectWindow(name);
  close();
  selectWindow("Reslice of "+name);
  run("Stack to Hyperstack...", "order=xyczt(default) channels="+w+" slices="+t+" frames=1 display=Grayscale");
  run("Reslice [/]...", "output=1.000 start=Left avoid");
  selectWindow("Reslice of "+name);
  close();
  selectWindow("Reslice of Reslice of "+name);
  run("Stack to Hyperstack...", "order=xyczt(default) channels=1 slices="+w+" frames="+h+" display=Grayscale");
  rename("4D Reslice of "+name);
}

macro "CBED Analyzer Action Tool - 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"{
	run("CSI PAD Analyzer");
}